OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Thibaut Monseigne
0x84009d7c = Monitoring avec la possibilité de filtrer le signal
0x8c1fc55b = 1.0
0x9f5c4075 = Monitoring
0xf6b2e3fa = NEUROPERF
0xf8034a49 = SANPSY / Inria Bordeaux
Comment
  Acquisition Signal
Comment
  Traitement Signal
Comment
  Affichage
Settings
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 100
  Display Time Scale = 30

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Rename
  New channel names = Fp1;Fp2;F3;Fz;F4;T7;C3;Cz;C4;T8;P3;Pz;P4;PO7;PO8;Oz
  0x8d21ff41 = ${Player_ScenarioDirectory}/Configs/Nautilus Channel Rename.xml
-> Signal Cleanup
  LowCutFrequency = 1
  HighCutFrequency = 100
  NotchLowFrequency = 48
  NotchHighFrequency = 52
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = $var{Low Cut-off Frequency (Hz)}
  High Cut-off Frequency (Hz) = $var{High Cut-off Frequency (Hz)}
  Band Pass Ripple (dB) = 0.5
-> Channel Selector "1:16" => #4
  Channel List = 1:16
  Action = Select
  Channel Matching Method = Smart
-> Signal Power => #5
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
  Logarithm = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/Configs/Power.xml
Matrix=#5 -> Puissance
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = $var{Display Time Scale}
  Matrix Count = 50
  Positive Data Only ? = true
  Gain = 0.1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
Data=#4 -> Signal display "Signal"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 200
  Vertical Offset = 0
  Time Scale = $var{Display Time Scale}
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Electrode localisation file reader => #8
  Filename = ${AdvancedViz_ChannelLocalisation}
Signal=#5, Channel localization=#8 -> 2D topographic map
  Interpolation type = Spline laplacian (currents)
  Delay (in s) = 0
