OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Thibaut Monseigne
0x84009d7c = Calibrage Pour le Protoole NEUROPERF
0x8c1fc55b = 1.0
0x9f5c4075 = Calibrage
0xf6b2e3fa = NEUROPERF
0xf8034a49 = SANPSY / Inria Bordeaux
Comment
  Acquisition Signal
Comment
  Signal Brut
Comment
  Traitement Signal
Comment
  Enregistrements
Comment
  Enregistrements
Comment
  Enregistrements
Comment
  Stimulations Listener
Comment
  Feedback
Settings
  Chemin = ${Player_ScenarioDirectory}/../Enregistrements
  ID Sujet = Test_001
  Session = 1
  Bloc = 1
  Durée = 300
  MAJ des fichiers Stats (Hz) = 1
  Electrode = Cz
  Display Time Scale = 30

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Rename
  New channel names = Fp1;Fp2;F3;Fz;F4;T7;C3;Cz;C4;T8;P3;Pz;P4;PO7;PO8;Oz
  0x8d21ff41 = ${Player_ScenarioDirectory}/Configs/Nautilus Channel Rename.xml
-> Signal Cleanup => #2
  LowCutFrequency = 1
  HighCutFrequency = 100
  NotchLowFrequency = 48
  NotchHighFrequency = 52
-> Channel Selector "$var{Electrode}" => #3
  Channel List = $var{Electrode}
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0625
  0x8d21ff41 = ${Player_ScenarioDirectory}/Configs/Time_Epoch.xml
-> Artefact Detector => #5
  Max (mV) = 100
#3 -> Temporal filter "Filtre A"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 15
  High Cut-off Frequency (Hz) = 30
  Band Pass Ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/Configs/Filter_Beta.xml
-> Signal Power => #7
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
  Logarithm = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/Configs/Power.xml
Signal=#7, Artefact=#5 -> Simple DSP "Artefact" => #8
  Equation = (B==1) ? 0 : A
  0x8d21ff41 = ${Player_ScenarioDirectory}/Configs/Higher_Energy_Reject_A.xml
#3 -> Temporal filter "Filtre B"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 6.25
  High Cut-off Frequency (Hz) = 9
  Band Pass Ripple (dB) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/Configs/Filter_Alpha_Theta_Somni.xml
-> Signal Power => #10
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.0625
  Logarithm = 1
  0x8d21ff41 = ${Player_ScenarioDirectory}/Configs/Power.xml
Signal=#10, Artefact=#5 -> Simple DSP "Artefact" => #11
  Equation = (B==1) ? 0 : A
  0x8d21ff41 = ${Player_ScenarioDirectory}/Configs/Higher_Energy_Reject_B.xml
Input - A=#8, Input - B=#11 -> Simple DSP "Ratio" => #12
  Equation = (A ==0 || B==0) ? 0 : A/B
Data=#2 -> Signal display "Signal"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = $var{Display Time Scale}
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#2 -> GDF file writer "Raw GDF"
  Filename = $var{Chemin}/$var{ID Sujet}/Raw/[$core{date}-$core{time}]_$var{Session}_$var{Bloc}_Raw.gdf
Input Signal=#2 -> Generic stream writer "Raw OV"
  Filename = $var{Chemin}/$var{ID Sujet}/Raw/[$core{date}-$core{time}]_$var{Session}_$var{Bloc}_Raw.ov
  Use compression = false
Lua Stimulator => #16
  Lua Script = ${Player_ScenarioDirectory}/Scripts/Baseline.lua
  Duree (s) = $var{Durée}
Input stream=#7, Stimulations stream=#16 -> CSV File Writer "A CSV"
  Filename = $var{Chemin}/$var{ID Sujet}/Data/Signal/[$core{date}-$core{time}]_$var{Session}_$var{Bloc}_A.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input stream=#10, Stimulations stream=#16 -> CSV File Writer "B CSV"
  Filename = $var{Chemin}/$var{ID Sujet}/Data/Signal/[$core{date}-$core{time}]_$var{Session}_$var{Bloc}_B.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#16 -> Identity => #19
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Pause
Signal=#12, Stimulations=#19 -> Score Listener => #21
  Duree pour Recompense = 0.25
  Niveau Super Recompense = 4
  Minimum = 1
  Critique = 2
  Recompense = 3
  Maximum = 4
  0x8d21ff41 = ${Player_ScenarioDirectory}/Configs/Score.xml
#21.Rewards -> Sound Player "Reward"
  PLAY trigger = OVTK_StimulationId_Label_01
  STOP trigger = OVTK_StimulationId_Label_02
  File to play = ${Player_ScenarioDirectory}/Sons/Reward.wav
  Loop = false
#21.Rewards -> Sound Player "Artefact"
  PLAY trigger = OVTK_StimulationId_Label_02
  STOP trigger = OVTK_StimulationId_Label_03
  File to play = ${Player_ScenarioDirectory}/Sons/Artefact.wav
  Loop = false
#21.Traffic Light -> Traffic Light
  Colors = 0:75,0,0; 25:75,75,0; 50:0,50,0; 75:0,100,100; 100:0,0,75
  Steps = 5
  0x8d21ff41 = ${Player_ScenarioDirectory}/Configs/Traffic_Light.xml
#21.Score -> Matrix Display "Score Display"
  Color gradient = 0:100,100,100; 100:100,100,100
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#19 -> Stimulation listener
  Log level to use = Information
#19 -> Sound Player
  PLAY trigger = OVTK_StimulationId_Beep
  STOP trigger = OVTK_StimulationId_Label_01
  File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  Loop = false
Signal=#8, Stimulations=#16 -> Stats Listener => #28
Signal=#11, Stimulations=#16 -> Stats Listener => #29
#16 -> Identity => #30
Signal=#12, Stimulations=#30 -> Stats Listener => #31
-> Matrix Display "Stats Display"
  Color gradient = 0:100,100,100; 100:100,100,100
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
A=#28, B=#29, A/B=#31, Score=#21.Score -> Stats Save
  Clock frequency (Hz) = $var{MAJ des fichiers Stats (Hz)}
  Script = ${Player_ScenarioDirectory}/Scripts/Stats_Save.py
  Output Stats Filename = $var{Chemin}/$var{ID Sujet}/Stats/[$core{date}-$core{time}]_$var{Session}_$var{Bloc}_Stats.csv
  Session = $var{Session}
  Bloc = $var{Bloc}
Input stream=#12, Stimulations stream=#30 -> CSV File Writer "Ratio CSV"
  Filename = $var{Chemin}/$var{ID Sujet}/Data/[$core{date}-$core{time}]_$var{Session}_$var{Bloc}_Ratio.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Matrix=#12, Markers=#30 -> Ratio
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Temporal Coherence = Time Locked
  Time Scale = $var{Display Time Scale}
  Matrix Count = 50
  Positive Data Only ? = true
  Gain = 0.2
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
Value=#12, Rewards=#21.Rewards, Baseline Start Stimulation=#30 -> Neuroperf Display
  Color gradient = 0:0,0,50; 25:0,100,100; 50:0,50,0; 75:100,100,0; 100:75,0,0
  Steps = 255
  Min = 0
  Max = 100
  Time = 300
  0x8d21ff41 = ${Player_ScenarioDirectory}/Configs/Display.xml
